PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data' + os.sep + expInfo[u'Session Code']
  Monitor = testMonitor
  color = $[0.506,0.506,0.506]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Session Code': u''}
  Save wide csv file = False
  expName = iohub wintab demo
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent trial_question_txt
      color = $[-1.000,-1.000,-1.000]
      pos = [0, 0.9]
      text [set every repeat] = $T_TEXT
      startVal [time (s)] = 0
      letterHeight = 0.05
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    ImageComponent trial_image
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $T_IMG
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    ImageComponent trial_end_image
      pos = [.8, -0.8]
      startVal [time (s)] = 0.0
      image [set every repeat] = but_stop.bmp
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    CodeComponent trial_custom_code
      Each Frame:
        # >>> iohub Custom Code

        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = globalClock.getTime()  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)


        pen_samples = tablet.getSamples()
        if pen_samples:
            pen_traces_stim.updateFromEvents(pen_samples)

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0

                if ps.pressure > 0 and trial_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)

                if penPosInExit>=penPosInExitStimThresh:
                    pen_traces_stim.tEnd=globalClock.getTime()
                    continueRoutine = False
                    break

            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
        # <<< iohub Custom Code
      Begin Routine:
        # >>> iohub Custom Code
        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED

        io.clearEvents()

        penDotOpacity = 0
        penDotPosition = [0,0]
        penDotColor = [1,0,0]

        penPosInExitStimThresh = 20
        penPosInExit = 0

        tablet.reporting = True
        # <<< iohub Custom Code
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False
        io.clearEvents()

        thisTrial['DV_TRIAL_START']=pen_traces_stim.tStart
        thisTrial['DV_TRIAL_END']=pen_traces_stim.tEnd

        io.addTrialHandlerRecord(thisTrial)

        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED

        penDotOpacity = 0
        # <<< iohub Custom Code
    PolygonComponent penDotStim
      opacity = 0.9
      lineColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      units = norm
      fillColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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  Routine instruct
    TextComponent instrText
      color = $[-1.000,-1.000,-1.000]
      wrapWidth = 800
      units = norm
      text = Press Any Key To Start Experiment.
      startVal [time (s)] = 0
      letterHeight = .05
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent init_iohub_wintab
      Begin Experiment:
        # >>> iohub Custom Code
        try:
            from ccutil import *
            io = start_iohub(expInfo[u'Session Code'], expName)
            tablet = io.devices.tablet

            # Check that the tablet device was created without any errors
            if tablet.getInterfaceStatus() != "HW_OK":
                print("Error creating Wintab device:", tablet.getInterfaceStatus())
                print("TABLET INIT ERROR:", tablet.getLastInterfaceErrorString())
                io.quit()
                core.quit()
                sys.exit(1)

            from psychopy.iohub.client.wintabtablet import PenPositionStim, PenTracesStim
            pen_pos_stim= PenPositionStim(win)
            pen_traces_stim= PenTracesStim(win)

            pen_pos_stim.autoDraw = False
            pen_traces_stim.autoDraw = False
            pen_pos_stim.status = NOT_STARTED
            pen_traces_stim.status = NOT_STARTED

            # Create the iohub datstore condition variables table.
            # The following 2 lines of code is a hack, as it does not appear
            # that you can get the order of the column names as found in the
            # condition file using any of the Builder generated python code.
            temp_exp_conds, temp_ecnames = data.importConditions('conditions\\trial_conditions.xlsx',returnFieldNames=True)
            temptrials = data.TrialHandler(temp_exp_conds,1)
            io.createTrialHandlerRecordTable(temptrials, temp_ecnames)
            temp_exp_conds =None
            temptrials=None

        except Exception, e:
            import sys
            print "!! Error starting ioHub: ",e," Exiting..."
            core.quit()
            sys.exit(1)
        # <<< iohub Custom Code
      End Experiment:
        # >>> iohub Custom Code
        io.quit()
        # <<< iohub Custom Code
  Routine practice
    TextComponent use_pen_instruct_txt_2
      color = $[-1.000,-1.000,-1.000]
      pos = [0, 0.9]
      text = Use this screen to practice using the Tablet Sylus / Pen.
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    ImageComponent practice_image
      startVal [time (s)] = 0.0
      image = 3Lines.png
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    ImageComponent practice_end_image
      pos = [.8, -.8]
      startVal [time (s)] = 0.0
      image = but_stop.bmp
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    CodeComponent draw_pos_and_traces
      Each Frame:
        # >>> iohub Custom Code

        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = t  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)

        # *pen_pos_stim* updates
        if t >= 0.0 and pen_pos_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_pos_stim.tStart = t  # underestimates by a little under one frame
            pen_pos_stim.frameNStart = frameN  # exact frame index
            pen_pos_stim.setAutoDraw(True)

        pen_samples = tablet.getSamples()
        if pen_samples:
            pen_traces_stim.updateFromEvents(pen_samples)
            pen_pos_stim.updateFromEvent(pen_samples[-1])

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0
                if ps.pressure > 0 and practice_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)
                if penPosInExit>=penPosInExitStimThresh:
                    continueRoutine = False
                    break

        # <<< iohub Custom Code
      Begin Routine:
        # >>> iohub Custom Code

        pen_traces_stim.setAutoDraw(False)
        pen_pos_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED
        pen_pos_stim.status = NOT_STARTED

        io.clearEvents()
        io.sendMessageEvent("Started Pen Practice Period")

        penPosInExitStimThresh = 20
        penPosInExit = 0

        tablet.reporting = True

        # <<< iohub Custom Code
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False
        io.clearEvents()
        io.sendMessageEvent("End Pen Practice Period")

        pen_pos_stim.clear()
        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_pos_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED
        pen_pos_stim.status = NOT_STARTED

        # <<< iohub Custom Code
  Routine thanks
    TextComponent thanksText
      color = $[0.004,-0.498,-0.498]
      wrapWidth = 800
      units = norm
      startVal [time (s)] = 0
      font = arial
      letterHeight = 0.050
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      text:
        This is the end of the experiment.

        Press any key to exit.
    KeyboardComponent goodbye
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine instruct
  Routine practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions\trial_conditions.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 1, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write your full name:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 2, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write the name of the city you live in:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 3, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write all letters of the alphabet from A to Z, using upper case letters:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 4, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write all letters of the alphabet from A to Z, using lower case letters:', u'DV_TRIAL_ID': -1}]
    Routine trial
  LoopTerminator trials
  Routine thanks
