PsychoPy2experiment version="1.83.02"
Settings
  Data filename = u'data' + os.sep + expInfo[u'Session Code']
  Monitor = testMonitor
  color = $[0.5,0.5,0.5]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Session Code': u''}
  Save wide csv file = False
  expName = iohub wintab demo
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine Play_AV
    CodeComponent UpdatePenPosGfx_2
      Begin Routine:
        resetPenPositionGraphic()

        tablet.reporting = True
        tablet.clearEvents()
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            updatePenPositionGraphic(pen_samples[-1])
    ImageComponent NO_WRT_BL_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2.5
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TR_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2.5
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TL_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2.5
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_BR_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2.5
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    MovieComponent movie_2
      movie [set every repeat] = "resources\\"+$T_MOV
      durationEstim = 2
      forceEndRoutine = False
      startEstim = 0.5
      startVal [time (s)] = $ITI
      backend = moviepy
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    PolygonComponent PenPosPoint_2
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2.5
      pos [set every frame] = $penDotPosition
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    SoundComponent sound_2
      sound [set every repeat] = "resources\\"+$T_SND
      stopVal [duration (s)] = sound_2.getDuration()+1
      durationEstim = 1
      startEstim = 1.5
      startVal [time (s)] = $ITI+1.0
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  Routine instruct_2
    TextComponent instrText_2
      wrapWidth = 800
      color = $[-1.000,-1.000,-1.000]
      text = Press Any Key To Start Experiment Trials.
      units = norm
      startVal [time (s)] = 0
      letterHeight = .05
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    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine NoWrite_Audio
    CodeComponent UpdatePenPosGfx_5
      Begin Routine:
        tablet.reporting = True
        tablet.clearEvents()

        resetPenPositionGraphic()
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            updatePenPositionGraphic(pen_samples[-1])
    ImageComponent NO_WRT_BL_5
      stopVal [condition] = practice_sound.status==FINISHED
      durationEstim = 4
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TR_5
      stopVal [condition] = practice_sound.status==FINISHED
      durationEstim = 4
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TL_5
      stopVal [condition] = practice_sound.status==FINISHED
      durationEstim = 4
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_BR_5
      stopVal [condition] = practice_sound.status==FINISHED
      durationEstim = 4
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    PolygonComponent PenPosPoint_5
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      stopVal [condition] = practice_sound.status==FINISHED
      durationEstim = 4
      pos [set every frame] = $penDotPosition
      startEstim = 0
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    SoundComponent practice_sound
      sound [set every repeat] = "resources\\"+$T_SND
      stopVal [duration (s)] = practice_sound.getDuration()+1
      durationEstim = 2
      startEstim = 2
      startVal [time (s)] = $ITI
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  Routine trial
    PolygonComponent white_backgnd
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [2, 2]
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    ImageComponent trial_image
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = "resources\\"+$T_IMG
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    ImageComponent trial_end_image
      pos = [.8, -0.8]
      startVal [time (s)] = 0.0
      image = resources\next.png
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    PolygonComponent penDotStim
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      units = norm
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent trial_custom_code
      Begin Routine:
        restPenTraceStim()
        resetPenPositionGraphic()
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False

        thisTrial['DV_TRIAL_START']=pen_traces_stim.tStart
        thisTrial['DV_TRIAL_END']=pen_traces_stim.tEnd
        io.addTrialHandlerRecord(thisTrial)

        restPenTraceStim()


        # <<< iohub Custom Code
      Each Frame:
        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = core.getTime()  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)


        pen_samples = tablet.getSamples()
        if pen_samples:
            dsamples = [ps for ps in pen_samples if not trial_end_image.contains(ps.getNormPos())]
            pen_traces_stim.updateFromEvents(dsamples)

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0

                if ps.pressure > 0 and trial_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)

                if penPosInExit>=pen_samples_for_press:
                    pen_traces_stim.tEnd=core.getTime()
                    continueRoutine = False
                    break

            updatePenPositionGraphic(pen_samples[-1])
  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[-1.000,-1.000,-1.000]
      text = Press Any Key To Start Practice Trials.
      units = norm
      startVal [time (s)] = 0
      letterHeight = .05
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[0.004,-0.498,-0.498]
      units = norm
      startVal [time (s)] = 1.0
      font = arial
      letterHeight = 0.050
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      text:
        This is the end of the experiment.

        Press any key to exit.
    KeyboardComponent goodbye
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    PolygonComponent PenPointThanks
      fillColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent updatePenPos
      Begin Routine:
        tablet.reporting = True
        tablet.clearEvents()
        penDotOpacity = 0
      End Routine:
        tablet.reporting = False
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
  Routine Init_tablet
    CodeComponent init_custom_code
      Begin Experiment:
        pen_samples_for_press = 20
        display_penpos_during_validation = True
        hover_pen_pos_alpha = 0.75
        press_pen_pos_alpha = 0.75
        hover_pen_pos_color = (0, 0, 1)
        press_pen_pos_color = (0, 1, 0)

        import wintabgraphics
        from wintabgraphics import PenPositionStim, PenTracesStim
        from psychopy.iohub.client.wintabtablet import ScreenPositionValidation
        from ccutil import *

        io = start_iohub(expInfo[u'Session Code'], expName)
        tablet = io.devices.tablet

        # Check that the tablet device was created without any errors
        if tablet.getInterfaceStatus() != "HW_OK":
            print("Error creating Wintab device:", tablet.getInterfaceStatus())
            print("TABLET INIT ERROR:", tablet.getLastInterfaceErrorString())
            io.quit()
            core.quit()
            sys.exit(1)

        pen_pos_stim= PenPositionStim(win)
        pen_traces_stim= PenTracesStim(win)

        pen_pos_stim.autoDraw = False
        pen_traces_stim.autoDraw = False
        pen_pos_stim.status = NOT_STARTED
        pen_traces_stim.status = NOT_STARTED

        # Create the iohub datstore condition variables table.
        # The following 2 lines of code is a hack, as it does not appear
        # that you can get the order of the column names as found in the
        # condition file using any of the Builder generated python code.
        temp_exp_conds, temp_ecnames = data.importConditions('conditions\\trial_conditions.xlsx',returnFieldNames=True)
        temptrials = data.TrialHandler(temp_exp_conds,1)
        io.createTrialHandlerRecordTable(temptrials, temp_ecnames)
        temp_exp_conds =None
        temptrials=None

        penDotOpacity = 0
        penDotPosition = [0,0]
        penDotColor = hover_pen_pos_color
        penPosInExit = 0

        def restPenTraceStim():
            global pen_traces_stim
            pen_traces_stim.clear()
            pen_traces_stim.setAutoDraw(False)
            pen_traces_stim.status = NOT_STARTED

        def resetPenPositionGraphic():
            global penPosInExit, penDotPosition, penDotColor, penDotOpacity
            penDotOpacity = 0
            penDotPosition = [0,0]
            penDotColor = hover_pen_pos_color
            penPosInExit = 0


        def updatePenPositionGraphic(lsample):
            global penDotPosition, penDotColor, penDotOpacity
            penDotPosition = lsample.getNormPos()
            if lsample.pressure > 0:
                penDotColor = press_pen_pos_color
                penDotOpacity = press_pen_pos_alpha
            else:
                penDotColor = hover_pen_pos_color
                penDotOpacity = hover_pen_pos_alpha
      End Experiment:
        io.quit()
  Routine PracticeTrial
    PolygonComponent white_backgnd_2
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [2, 2]
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    ImageComponent tprac_image
      startVal [time (s)] = 0.0
      image [set every repeat] = "resources\\"+$T_IMG
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    ImageComponent trial_end_image_2
      pos = [.8, -0.8]
      startVal [time (s)] = 0.0
      image = resources\next.png
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    PolygonComponent penDotStim_2
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      units = norm
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent trial_custom_code_2
      Begin Routine:
        restPenTraceStim()
        resetPenPositionGraphic()
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False

        thisPractice_trial['DV_TRIAL_START']=pen_traces_stim.tStart
        thisPractice_trial['DV_TRIAL_END']=pen_traces_stim.tEnd
        io.addTrialHandlerRecord(thisPractice_trial)

        restPenTraceStim()

        # <<< iohub Custom Code
      Each Frame:
        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = core.getTime()  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)


        pen_samples = tablet.getSamples()
        if pen_samples:
            pen_traces_stim.updateFromEvents(pen_samples)

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0

                if ps.pressure > 0 and trial_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)

                if penPosInExit>=pen_samples_for_press:
                    pen_traces_stim.tEnd=core.getTime()
                    continueRoutine = False
                    break

            updatePenPositionGraphic(pen_samples[-1])
  Routine validate
    CodeComponent validate_code
      Begin Routine:
        # Run the Pen Position Validation Procedure
        io.sendMessageEvent(">>> Pen Validation Procedure Started")
        val_result = ScreenPositionValidation(win, io,
                                              target_stim = None,
                                              pos_grid = None,
                                              display_pen_pos=display_penpos_during_validation).run()
        if val_result is None:
            # This means that validation was terminated by user
            # before completing

            io.sendMessageEvent("Validation Procedure for "
                                 "Wintab Device Aborted.")
        io.sendMessageEvent(">>> Pen Validation Procedure Complete")


        if val_result:
            # Save out the validation results to the hdf5 file as messages
            # in case we want to access the data later
            #import pprint
            #pprint.pprint(val_result)
            io.sendMessageEvent(">>> Pen Validation Results")
            for key, val in val_result.items():
                if key is not 'target_data':
                    # do not send msg for the dict of arrays of samples
                    io.sendMessageEvent("{} : {}".format(key,val))
            io.sendMessageEvent("<<< Pen Validation Results End")
      End Routine:
        win.winHandle.maximize()
        win.winHandle.set_fullscreen(True)
        win.winHandle.activate()
  Routine DisplayCircleCCWImage
    CodeComponent UpdatePenPosGfx_6
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            updatePenPositionGraphic(pen_samples[-1])
    ImageComponent NO_WRT_BL_6
      stopVal [duration (s)] = 2
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TR_6
      stopVal [duration (s)] = 2
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_TL_6
      stopVal [duration (s)] = 2
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent NO_WRT_BR_6
      stopVal [duration (s)] = 2
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = resources\nowriting.jpg
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    ImageComponent greendot1_2
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      image = resources\Circle_CCW.png
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    PolygonComponent PenPosPoint_6
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      stopVal [duration (s)] = 2
      pos [set every frame] = $penDotPosition
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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Flow
  Routine Init_tablet
  Routine validate
  Routine instruct
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = .\conditions\trial_conditions.xlsx
    loopType = random
    nReps = 1
    Selected rows = 0:2
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    conditions:
      [{u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 1, u'T_IMG': u'1Line.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write your full name:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 2, u'T_IMG': u'1Line.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write the name of the city you live in:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 3, u'T_IMG': u'3Lines.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write all letters of the alphabet from A to Z, using upper case letters:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 4, u'T_IMG': u'3Lines.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write all letters of the alphabet from A to Z, using lower case letters:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1}]
    Routine NoWrite_Audio
    Routine PracticeTrial
  LoopTerminator practice_trials
  Routine instruct_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = .\conditions\trial_conditions.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
    Selected rows = 2:6
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    conditions:
      [{u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 1, u'T_IMG': u'1Line.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write your full name:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 2, u'T_IMG': u'1Line.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write the name of the city you live in:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 3, u'T_IMG': u'3Lines.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write all letters of the alphabet from A to Z, using upper case letters:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': -1.1, u'ROW_INDEX': 4, u'T_IMG': u'3Lines.png', u'T_START_SND': u'go.wav', u'ITI': 0.5, u'T_TEXT': u'Write all letters of the alphabet from A to Z, using lower case letters:', u'DV_TRIAL_END': -1.1, u'DV_TRIAL_ID': -1}]
    Routine Play_AV
    Routine DisplayCircleCCWImage
    Routine trial
  LoopTerminator trials
  Routine thanks
